PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = untitled
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      wrapWidth = 1.5
      text [set every repeat] = $stim
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_3
      text = ¡Gracias!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Lee en voz alta las siguientes palabras.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = list.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'stim': u'pata'},
      {u'stim': u'bata'},
      {u'stim': u'taco'},
      {u'stim': u'dedo'},
      {u'stim': u'casa'},
      {u'stim': u'gato'},
      {u'stim': u'daba'},
      {u'stim': u'hada'},
      {u'stim': u'haga'},
      {u'stim': u'en Mallorca'},
      {u'stim': u'en Finlandia'},
      {u'stim': u'encima'},
      {u'stim': u'enano'},
      {u'stim': u'hincha'},
      {u'stim': u'a\xf1o'},
      {u'stim': u'tango'},
      {u'stim': u'pala'},
      {u'stim': u'alto'},
      {u'stim': u'algo'},
      {u'stim': u'para'},
      {u'stim': u'corre'},
      {u'stim': u'Enrique'},
      {u'stim': u'Rosa'},
      {u'stim': u'Israel'},
      {u'stim': u'\xbfCu\xe1ndo vienes?'},
      {u'stim': u'\xbfVienes a las 6?'},
      {u'stim': u'El viento norte y el sol porfiaban sobre cu\xe1l de ellos era el m\xe1s fuerte, cuando acert\xf3 a pasar un viajero envuelto en ancha capa. Convinieron en que quien antes lograra obligar al viajero a quitarse la capa ser\xeda considerado m\xe1s poderoso. El viento norte sopl\xf3 con gran furia, pero cuanto m\xe1s soplaba, m\xe1s se arrebujaba en su capa el viajero; por fin el viento norte abandon\xf3 la empresa. Entonces brill\xf3 el sol con ardor, e inmediatamente se despoj\xf3 de su capa el viajero; por lo que el viento norte hubo de reconocer la superioridad del sol.'}]
    Routine trial
  LoopTerminator trials
  Routine end
